//Bspline Transformation - brainglobe-registration

//ImageTypes
(FixedInternalImagePixelType "short")
(MovingInternalImagePixelType "short")

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "LinearInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "RecursiveBSplineTransform")

(ErodeMask "false" )

(NumberOfResolutions 3)
(FinalGridSpacingInVoxels 50.000000 50.000000 50.000000)

(HowToCombineTransforms "Compose")

(WriteTransformParametersEachIteration "false")
(ResultImageFormat "tiff")
(WriteResultImage "true")
(CompressResultImage "false")
(WriteResultImageAfterEachResolution "false")
(ShowExactMetricValue "false")

// Option supported in elastix 4.1:
(UseFastAndLowMemoryVersion "true")

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 500 )

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(FixedImageBSplineInterpolationOrder 1 )
(UseRandomSampleRegion "true")
(SampleRegionSize 300.0 300.0 300.0)
(NumberOfSpatialSamples 10000 )
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 3)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
